PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s_%s' % (expInfo['group'], expInfo['participant'], expName, expInfo['date'])
  End Message = Merci de votre patience et de votre participation.
  Experiment info = {'participant': '', 'group': '["native","learner"]'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['resources/practiceMainTask.xlsx', 'resources/stimuliLexTALE.xlsx', 'resources/stimuliMainTask.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = scalar-implicatures
  exportHTML = on Save
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine welcome
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    TextComponent textWelcome
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        ***** EXPÉRIENCE EN LIGNE *****

        Vous avez complété la première tâche. Dans cette expérience, vous accomplirez les deux dernières tâches.


        [BARRE D'ESPACE]
    KeyboardComponent keyWelcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine saving
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    CodeComponent savingCode
      Code Type = JS
      Begin JS Routine:
        // Disable downloading results to browser
        psychoJS._saveResults = 0;

        // Generate filename for results
        let filename = "group_" + expInfo["group"] + "_participant_" + expInfo["participant"] + "_" + psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime;

        // Convert data object to JSON
        let dataJSON = JSON.stringify(psychoJS.experiment._trialsData);

        // Send data to OSF
        fetch("https://pipe.jspsych.org/api/data/", {
              method: "POST",
              headers: {
                "Content-Type": "application/json",
                Accept: "*/*",
              },
              body: JSON.stringify({
                experimentID: "pGFiZFN0CmV4",
                filename: `${filename}.json`,
                data: dataJSON,
              }),
        }).then(response => response.json()).then(data => {
            console.log(data);
            quitPsychoJS("Merci d'avoir participé !", true);
        });
    TextComponent savingText
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        ***** FIN *****

        Je vous remercie d'avoir complété l'expérience !

        Les résultats sont en cours d'enregistrement.


        Veuillez patienter...
  Routine fix
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    TextComponent fix_rand
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = random()+0.3
      text = +
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  Routine taskSI
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    CodeComponent codeSI_inst
      Code Type = Auto->JS
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      Begin Routine:
        instructionsSI.alignText = 'left'
    TextComponent instructionsSI
      letterHeight = 0.08
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.6
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      text:
        ***** TÂCHE 2: ÉVALUATION DES PHRASES *****

        Des phrases vous sont présentées sur l'ecran. Au début, la phrase affichée est incomplète. Appuyez sur la barre d'espace lorsque vous êtes prêt à terminer la phrase. Lisez ensuite le reste de la phrase et répondez à la question.

        Appuyez sur [F] pour répondre « non ».
        Appuyez sur [J] pour répondre « oui ».

        Effectuez la tâche le plus rapidement et le mieux possible. Tout d'abord, il y a quelques phrases d'entraînement.

        [BARRE D'ESPACE]
    KeyboardComponent keySI
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine taskLDT
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    TextComponent instructionsLDT
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        ***** TÂCHE 3: DÉTERMINATION DU NIVEAU DE FRANÇAIS *****

        Des mots sont affichés à l'écran. Ils ressemblent tous à des mots français. Certains d'entre eux sont vrais. D'autres sont faux.

        Appuyez sur [F] si le mot est faux.
        Appuyez sur [J] si le mot est vrai.


        [BARRE D'ESPACE]
    KeyboardComponent keyLDT
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent codeLDT_ins
      Code Type = Auto->JS
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      Begin Routine:
        instructionsLDT.alignText = 'left'
  Routine stimLDT
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    TextComponent textLDT
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $word
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    KeyboardComponent respLDT
      allowedKeys [set every repeat] = 'f','j'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine stimSI
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    CodeComponent codeSI
      Code Type = Both
      Begin JS Routine:
        textSI.setText("");

        phrase1 = `${speaker} dit : « ${subject} ${verb} ${scale_first}. »`;
        phrase2 = "Pouvez-vous en conclure ce qui suit ?";
        phrase3 = "...";
        phrase4 = "[BARRE D'ESPACE]";
      Begin Routine:
        textSI.setText("")

        phrase1 = '%s dit : « %s %s %s. »'%(speaker, subject, verb, scale_first)
        phrase2 = 'Pouvez-vous en conclure ce qui suit ?'
        phrase3 = '...'
        phrase4 = "[BARRE D'ESPACE]"
    TextComponent textSI
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $'%s\n\n\n%s\n\n\n%s\n\n\n%s'%(phrase1, phrase2, phrase3, phrase4)
      wrapWidth = 1.6
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    CodeComponent alignSI
      Code Type = Both
      Begin JS Routine:
        textSI.setAlignHoriz("center");
      Begin Routine:
        textSI.alignText = "center"
    KeyboardComponent respSI
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Merci d'avoir participé dans cette étude!

        Si vous avez trouvé cette étude sur Prolific, le code d'achèvement est C1IT5MXI.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stimSI_RT
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    CodeComponent codeSI_RT
      Code Type = Both
      Begin JS Routine:
        textSI_RT.setText("")

        phrase1 = `${speaker} dit : « ${subject} ${verb} ${scale_first}. »`;
        phrase2 = "Pouvez-vous en conclure ce qui suit ?";
        phrase3 = `Selon ${speaker}, ${subject} n\'est pas ${scale_second}.`;
        phrase4 = "[F] non \t\t [J] oui";
      Begin Routine:
        textSI_RT.setText("")

        phrase1 = '%s dit : « %s %s %s. »'%(speaker, subject, verb, scale_first)
        phrase2 = 'Pouvez-vous en conclure ce qui suit ?'
        phrase3 = 'Selon %s, %s n\'est pas %s.'%(speaker, subject, scale_second)
        phrase4 = '[F] non \t\t [J] oui'
    TextComponent textSI_RT
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $'%s\n\n\n%s\n\n\n%s\n\n\n%s'%(phrase1, phrase2, phrase3, phrase4)
      wrapWidth = 1.6
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    CodeComponent alignSI_RT
      Code Type = Both
      Begin JS Routine:
        textSI_RT.setAlignHoriz("center");
      Begin Routine:
        textSI_RT.alignText = "center"
    KeyboardComponent respSI_RT
      allowedKeys = 'f', 'j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceEnd
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    TextComponent text_norm
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Voici la fin de l'entraînement. Appuyez sur la barre d'espacement pour commencer la véritable tâche.

        [BARRE D'ESPACE]
    KeyboardComponent key_instruct
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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  Routine pause
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    CodeComponent codePause
      Code Type = Both
      Begin Experiment:
        def multiples(value, length):
            return [*range(value, length*value+1, value)]

        breakN = 0
        breakOn = multiples(28,3)
      Begin JS Experiment:
        function multiples(value, length) {
            return [...util.range(value, ((length * value) + 1), value)];
        }
        breakN = 0;
        breakOn = multiples(28, 3);
      Begin JS Routine:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if (_pj.in_es6((lexTALE.thisN + 1), breakOn.slice(0, (- 1)))) {
            continueRoutine = true;
            breakN += 1;
            text = `Ceci était le bloc ${breakN} des ${breakOn.length}. Faites une pause et appuyez sur la barre d\'espacement pour continuer.`;
            textPause.setText(text);
        } else {
            continueRoutine = false;
        }
      Begin Routine:
        if lexTALE.thisN+1 in breakOn[:-1]:
            continueRoutine = True
            breakN += 1
            text = 'Ceci était le bloc %s des %s. Faites une pause et appuyez sur la barre d\'espacement pour continuer.'%(breakN,len(breakOn))
            textPause.setText(text)
        else:
            continueRoutine = False
    TextComponent textPause
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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    KeyboardComponent keyPause
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = first key
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    CodeComponent alignPause
      Code Type = Both
      Begin Experiment:
        # Code components should usually appear at the top
        # of the routine. This one has to appear after the
        # text component it refers to.
        textPause.alignText= 'center'
      Begin JS Experiment:
        // Code component set to Both
        textPause.setAlignHoriz('center')
Flow
  Routine welcome
  Routine taskSI
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = resources/practiceMainTask.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'id': 'a', 'scale_term': 'longue/interminable', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'scale_first': 'longue', 'scale_second': 'interminable', 'subject': 'la route', 'verb': 'est'},
      {'id': 'b', 'scale_term': 'proche/lointain', 'scale_type': None, 'condition': 'filler-true', 'speaker': 'Paul', 'scale_first': 'proche', 'scale_second': 'lointain', 'subject': 'le bâtiment', 'verb': 'est'},
      {'id': 'c', 'scale_term': 'égoïste/petit', 'scale_type': None, 'condition': 'filler-false', 'speaker': 'Paul', 'scale_first': 'égoïste', 'scale_second': 'petit', 'subject': 'le président', 'verb': 'est'}]
    Routine fix
    Routine stimSI
    Routine stimSI_RT
  LoopTerminator practice
  Routine practiceEnd
  LoopInitiator implicatures loopType="TrialHandler"
    conditionsFile = resources/stimuliMainTask.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'id': 1, 'scale_term': 'spéciale/unique', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'scale_first': 'spéciale', 'scale_second': 'unique', 'subject': 'le collier', 'verb': 'est'},
      {'id': 2, 'scale_term': 'faible/vide', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'scale_first': 'faible', 'scale_second': 'vide', 'subject': 'la pile', 'verb': 'est'},
      {'id': 3, 'scale_term': 'dure/insoluble', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'scale_first': 'dure', 'scale_second': 'insoluble', 'subject': 'la tâche', 'verb': 'est'},
      {'id': 4, 'scale_term': 'mémorable/inoubliable', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'scale_first': 'mémorable', 'scale_second': 'inoubliable', 'subject': 'le voyage', 'verb': 'est'},
      {'id': 5, 'scale_term': 'calme/inaudible', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'scale_first': 'calme', 'scale_second': 'inaudible', 'subject': 'la classe', 'verb': 'est'},
      {'id': 6, 'scale_term': 'mouillé/trempé', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Julie', 'scale_first': 'mouillé', 'scale_second': 'trempé', 'subject': 'la serviette', 'verb': 'est'},
      {'id': 7, 'scale_term': 'triste/abattu', 'scale_type': 'B', 'condition': 'test', 'speaker': 'Paul', 'scale_first': 'triste', 'scale_second': 'abattu', 'subject': 'la fille', 'verb': 'est'}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
    Routine fix
    Routine stimSI
    Routine stimSI_RT
  LoopTerminator implicatures
  Routine taskLDT
  LoopInitiator lexTALE loopType="TrialHandler"
    conditionsFile = resources/stimuliLexTALE.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'word': 'cheveux', 'status': 'word', 'corrAns': 'j'},
      {'word': 'soumon', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'cloche', 'status': 'word', 'corrAns': 'j'},
      {'word': 'fascine', 'status': 'word', 'corrAns': 'j'},
      {'word': 'huif', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'semonce', 'status': 'word', 'corrAns': 'j'},
      {'word': 'canoter', 'status': 'word', 'corrAns': 'j'},
      {'word': 'infâme', 'status': 'word', 'corrAns': 'j'},
      {'word': 'fourmi', 'status': 'word', 'corrAns': 'j'},
      {'word': 'cadenas', 'status': 'word', 'corrAns': 'j'},
      {'word': 'racaille', 'status': 'word', 'corrAns': 'j'},
      {'word': 'pourcine', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'œillet', 'status': 'word', 'corrAns': 'j'},
      {'word': 'raplaner', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'plaiser', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'cerveler', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'endifier', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'jamain', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'ennemi', 'status': 'word', 'corrAns': 'j'},
      {'word': 'pouce', 'status': 'word', 'corrAns': 'j'},
      {'word': 'metter', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'fosse', 'status': 'word', 'corrAns': 'j'},
      {'word': 'inciter', 'status': 'word', 'corrAns': 'j'},
      {'word': 'salière', 'status': 'word', 'corrAns': 'j'},
      {'word': 'fouet', 'status': 'word', 'corrAns': 'j'},
      {'word': 'cessure', 'status': 'nonword', 'corrAns': 'f'},
      {'word': 'clouer', 'status': 'word', 'corrAns': 'j'}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
    Routine fix
    Routine stimLDT
    Routine pause
  LoopTerminator lexTALE
  Routine saving
